PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.9216, 0.9216, 0.9216
  expName = Dashboard
  keyboardBackend = ioHub
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Routines
  Routine Start
    ButtonComponent Start_Button
      bold = True
      color = 1.0000, 1.0000, 1.0000
      fillColor = -1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Start
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  Routine GR
    TextComponent GetReady_Text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent GetRead_Cross
      fillColor = 0.6549, 0.6549, 0.6549
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine End
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        End of the experiment.

        Thank you for participating!
  Routine SS
    TextComponent StorySentence_Text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $StorySentences
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  Routine Rat
    TextComponent Rating_Text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How negative are you feeling?
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    SliderComponent Rating_Response
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "Slightly", "Moderately", "Very", "Extremely")
      letterHeight = 0.035
      pos = (0, -0.14)
      size = (1.4, 0.15)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent Rating_Done
      bold = True
      fillColor = -1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.35)
      size = (0.2, 0.1)
      startVal [condition] = $Rating_Response.getRating() != None
      text = Done
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  Routine NS
    TextComponent NeutralStatement_Text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text [set every repeat] = $NeutralStatement
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  Routine Cond
    TextboxComponent ConditionTextBox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      size = (1, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent ConditionDone
      bold = True
      color = 1.0000, 1.0000, 1.0000
      fillColor = -1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.0, -0.25)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Done
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    TextComponent ConditionText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = What robot condition is being used for this block?
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  Routine RegRat
    TextComponent RegulationRating_Text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = I successfully implemented the reappraisal strategy in the last block.
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    SliderComponent RegulationRating_Response
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      labels = ("strongly disagree", "disagree", "undecided", "agree", "strongly agree")
      letterHeight = 0.035
      pos = (0, -0.14)
      size = (1.4, 0.15)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent RegulationRating_Done
      bold = True
      color = 1.0000, 1.0000, 1.0000
      fillColor = -1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = $RegulationRating_Response.getRating() != None
      text = Done
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  Routine BC
    ButtonComponent BContinue_Button
      bold = True
      color = 1.0000, 1.0000, 1.0000
      fillColor = -1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    TextComponent BContinue_Text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Press CONTINUE when ready to move on to the next block.
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  Routine Trial
    TextComponent Trial_NSB
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $NSBs
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    TextComponent Trial_Cue
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 12
      text [set every repeat] = $Cue
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    TextComponent Trial_RatingText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 15
      text = How negative are you feeling?
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    SliderComponent Trial_RatingResponse
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "Slightly", "Moderately", "Very", "Extremely")
      letterHeight = 0.04
      pos = (0, -0.14)
      size = (1.5, 0.15)
      startVal [time (s)] = 15
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent Trial_ResponseDone
      bold = True
      color = 1.0000, 1.0000, 1.0000
      fillColor = -1.0000, -1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = $Trial_RatingResponse.getRating() != None
      text = Done
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Flow
  Routine Start
  Routine Cond
  Routine GR
  LoopInitiator Neg1 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Negative1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StorySentences': 'Et vulputate'},
      {'StorySentences': 'luctus nullam'},
      {'StorySentences': 'urna blandit'},
      {'StorySentences': 'duis mi'},
      {'StorySentences': 'posuere velit'},
      {'StorySentences': 'vivamus dictumst.'},
      {'StorySentences': 'Ridiculus'},
      {'StorySentences': 'nunc.'}]
    Routine SS
  LoopTerminator Neg1
  Routine Rat
  LoopInitiator NSB1 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NSB1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NSBs': 'Mauris, est? Id diam. Natoque! Facilisis mi pretium posuere molestie faucibus praesent dapibus.', 'Cue': 'REACT'},
      {'NSBs': 'Aliquet blandit eget wisi egestas imperdiet. Vehicula tincidunt proin. Dolor magnis diam laoreet.', 'Cue': 'REGULATE'},
      {'NSBs': 'Facilisi! Integer ac commodo pede quam urna scelerisque tempus malesuada.', 'Cue': 'REACT'},
      {'NSBs': 'Eleifend ut venenatis! A dolorem justo gravida. Fusce pretium augue eleifend? Facilisis vitae gravida.', 'Cue': 'REGULATE'},
      {'NSBs': 'Lorem vulputate dapibus pretium fringilla pharetra urna at at et atque lectus.', 'Cue': 'REACT'},
      {'NSBs': 'Vel egestas elit vel. Iaculis orci? Lectus donec luctus nibh urna. Eros iaculis accumsan tempora.', 'Cue': 'REGULATE'},
      {'NSBs': 'Nonummy natoque malesuada metus pellentesque lorem. Eleifend arcu vulputate. Vestibulum faucibus morbi nibh? Duis.', 'Cue': 'REACT'},
      {'NSBs': 'Sollicitudin quis nibh ante felis sapien enim? Ante magna. Laoreet rutrum dui, natoque! Pretium sollicitudin.', 'Cue': 'REGULATE'},
      {'NSBs': 'Orci pellentesque sollicitudin ab wisi nunc ridiculus dignissim eget consequat aliquet leo laoreet.', 'Cue': 'REACT'},
      {'NSBs': 'Orci tortor elementum nulla. Facilisi lectus rhoncus sagittis viverra vitae.', 'Cue': 'REGULATE'}]
    Routine Trial
  LoopTerminator NSB1
  Routine GR
  LoopInitiator Neu1 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Neutral1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StorySentences': 'John and Jack are good friends.'},
      {'StorySentences': 'On Tuesday after school, they went to the playground.'},
      {'StorySentences': 'They played tag at the playground.'},
      {'StorySentences': 'John liked to go on the swings.'},
      {'StorySentences': 'Jack liked to play basketball.'},
      {'StorySentences': 'They went home after playing at the playground.'}]
    Routine SS
  LoopTerminator Neu1
  LoopInitiator NeuSta1 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NeutralStatements1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NeutralStatement': 'Good morning.'},
      {'NeutralStatement': 'It will be sunny.'},
      {'NeutralStatement': 'Where is the washroom?'},
      {'NeutralStatement': 'I have no news today.'},
      {'NeutralStatement': 'This is a sentence.'},
      {'NeutralStatement': 'See you later.'}]
    Routine NS
  LoopTerminator NeuSta1
  Routine Rat
  Routine RegRat
  Routine BC
  Routine Cond
  Routine GR
  LoopInitiator Neg2 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Negative2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StorySentences': 'Ut atque'},
      {'StorySentences': 'facilisis commodo'},
      {'StorySentences': 'a accumsan'},
      {'StorySentences': 'consectetuer neque'},
      {'StorySentences': 'posuere tempus'},
      {'StorySentences': 'quam. Non'},
      {'StorySentences': 'iaculis'},
      {'StorySentences': 'eleifend.'}]
    Routine SS
  LoopTerminator Neg2
  Routine Rat
  LoopInitiator NSB2 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NSB2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NSBs': 'Justo nec aliquet est aenean potenti dictumst. Phasellus vitae. Ultricies montes.', 'Cue': 'REACT'},
      {'NSBs': 'Dolorem augue viverra culpa sit accusamus? Consequat eros convallis! A. Blandit, justo.', 'Cue': 'REGULATE'},
      {'NSBs': 'Ipsum justo in sit pellentesque turpis wisi! Quam tellus! Lacus phasellus id ultricies natoque.', 'Cue': 'REACT'},
      {'NSBs': 'Aliquet vel. Temporibus consequat felis! Tempora vitae interdum diam? Nec nullam molestie magna aliquet nonummy.', 'Cue': 'REGULATE'},
      {'NSBs': 'Venenatis, natoque erat maecenas pede volutpat sagittis tincidunt vehicula! A. Metus.', 'Cue': 'REACT'},
      {'NSBs': 'Natoque tempus nibh eu. Quis primis sollicitudin elementum? Wisi, eleifend pede facilisis.', 'Cue': 'REGULATE'},
      {'NSBs': 'Sem massa atque turpis ridiculus praesent ac sapien, elit tincidunt neque pretium.', 'Cue': 'REACT'},
      {'NSBs': 'Augue? Dui. Consequat! Accumsan a aenean. Luctus, sodales fusce sodales tempor cras, sem urna vestibulum.', 'Cue': 'REGULATE'},
      {'NSBs': 'Ultricies tellus ridiculus neque erat! Sem! Risus, aenean culpa. Culpa.', 'Cue': 'REACT'},
      {'NSBs': 'Pede est imperdiet molestie bibendum tempor curabitur, turpis. Sapien lorem etiam.', 'Cue': 'REGULATE'}]
    Routine Trial
  LoopTerminator NSB2
  Routine GR
  LoopInitiator Neu2 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Neutral2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StorySentences': 'John and Jack are good friends.'},
      {'StorySentences': 'On Tuesday after school, they went to the playground.'},
      {'StorySentences': 'They played tag at the playground.'},
      {'StorySentences': 'John liked to go on the swings.'},
      {'StorySentences': 'Jack liked to play basketball.'},
      {'StorySentences': 'They went home after playing at the playground.'}]
    Routine SS
  LoopTerminator Neu2
  LoopInitiator NeuSta2 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NeutralStatements2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NeutralStatement': 'Good morning.'},
      {'NeutralStatement': 'It will be sunny.'},
      {'NeutralStatement': 'Where is the washroom?'},
      {'NeutralStatement': 'I have no news today.'},
      {'NeutralStatement': 'This is a sentence.'},
      {'NeutralStatement': 'See you later.'}]
    Routine NS
  LoopTerminator NeuSta2
  Routine Rat
  Routine RegRat
  Routine BC
  Routine Cond
  Routine GR
  LoopInitiator Neg3 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Negative3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StorySentences': 'Montes. Temporibus'},
      {'StorySentences': 'velit mauris'},
      {'StorySentences': 'erat vestibulum,'},
      {'StorySentences': 'faucibus'},
      {'StorySentences': 'imperdiet'},
      {'StorySentences': 'iaculis?'},
      {'StorySentences': 'Proin'},
      {'StorySentences': 'mattis.'}]
    Routine SS
  LoopTerminator Neg3
  Routine Rat
  LoopInitiator NSB3 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NSB3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NSBs': 'Mi facilisis rutrum nonummy tortor commodo facilisi maecenas! Ridiculus. Ullamcorper lacus enim.', 'Cue': 'REACT'},
      {'NSBs': 'Orci sapien dapibus porta vel consectetuer duis mauris sed donec platea facilisi.', 'Cue': 'REGULATE'},
      {'NSBs': 'Massa, interdum felis massa lectus euismod massa dapibus venenatis leo aliquam.', 'Cue': 'REACT'},
      {'NSBs': 'Luctus eget fusce. Luctus faucibus at tincidunt temporibus? Diam placerat.', 'Cue': 'REGULATE'},
      {'NSBs': 'Rutrum lacus integer vitae. Vulputate phasellus. Pharetra fringilla luctus elit.', 'Cue': 'REACT'},
      {'NSBs': 'Erat phasellus arcu nonummy mauris consequat! Venenatis et interdum auctor egestas ridiculus.', 'Cue': 'REGULATE'},
      {'NSBs': 'In sem sodales mi mattis sapien sed vulputate porta mi pede.', 'Cue': 'REACT'},
      {'NSBs': 'Vivamus leo mi turpis? Ridiculus velit! A, euismod lorem neque proin aliquet dolorem.', 'Cue': 'REGULATE'},
      {'NSBs': 'Sodales ligula, mi aliquet orci. Scelerisque natoque eleifend atque. Erat duis turpis. Luctus.', 'Cue': 'REACT'},
      {'NSBs': 'Rhoncus euismod mi enim. Consequat nec dolorem dui orci blandit! Facilisi, vitae vivamus sollicitudin fermentum.', 'Cue': 'REGULATE'}]
    Routine Trial
  LoopTerminator NSB3
  Routine GR
  LoopInitiator Neu3 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Neutral3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine SS
  LoopTerminator Neu3
  LoopInitiator NeuSta3 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NeutralStatements3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NeutralStatement': 'Good morning.'},
      {'NeutralStatement': 'It will be sunny.'},
      {'NeutralStatement': 'Where is the washroom?'},
      {'NeutralStatement': 'I have no news today.'},
      {'NeutralStatement': 'This is a sentence.'},
      {'NeutralStatement': 'See you later.'}]
    Routine NS
  LoopTerminator NeuSta3
  Routine Rat
  Routine RegRat
  Routine BC
  Routine Cond
  Routine GR
  LoopInitiator Neg4 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Negative4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StorySentences': 'Dignissim vivamus'},
      {'StorySentences': 'facilisis. Platea'},
      {'StorySentences': 'mi nonummy'},
      {'StorySentences': 'sodales convallis'},
      {'StorySentences': 'morbi eleifend'},
      {'StorySentences': 'ultricies'},
      {'StorySentences': 'pede!'},
      {'StorySentences': 'A.'}]
    Routine SS
  LoopTerminator Neg4
  Routine Rat
  LoopInitiator NSB4 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NSB4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NSBs': 'Aenean sit praesent eros facilisi nibh tellus lectus curabitur sit dolor.', 'Cue': 'REACT'},
      {'NSBs': 'Sem potenti. Culpa neque malesuada dolorem venenatis volutpat malesuada nec lorem elit leo phasellus consectetuer.', 'Cue': 'REGULATE'},
      {'NSBs': 'Tempor. Maecenas ante at atque eros eleifend. Ultricies dictumst est dignissim.', 'Cue': 'REACT'},
      {'NSBs': 'Sagittis nibh! Vitae dolor facilisi ridiculus? In! A facilisi? Nunc mi suspendisse. Dignissim diam imperdiet.', 'Cue': 'REGULATE'},
      {'NSBs': 'Curabitur non molestie magnis tellus atque tellus tellus! Luctus temporibus orci eleifend lectus.', 'Cue': 'REACT'},
      {'NSBs': 'Lacus, felis tempora gravida euismod fusce convallis integer dui mauris fermentum temporibus in.', 'Cue': 'REGULATE'},
      {'NSBs': 'Leo montes praesent gravida facilisis lacus mauris sollicitudin eget facilisi est ligula ultricies! Dolorem. Molestie.', 'Cue': 'REACT'},
      {'NSBs': 'Etiam quam volutpat eget at neque? Diam quam id, felis eu tempora lorem tincidunt.', 'Cue': 'REGULATE'},
      {'NSBs': 'Suscipit scelerisque? Facilisis euismod, ab cras ab. Suspendisse dolorem wisi id.', 'Cue': 'REACT'},
      {'NSBs': 'Vehicula tincidunt enim odio. Duis mauris molestie integer sagittis eleifend! Tempor? Eget vulputate.', 'Cue': 'REGULATE'}]
    Routine Trial
  LoopTerminator NSB4
  Routine GR
  LoopInitiator Neu4 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Neutral4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine SS
  LoopTerminator Neu4
  LoopInitiator NeuSta4 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NeutralStatements4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NeutralStatement': 'Good morning.'},
      {'NeutralStatement': 'It will be sunny.'},
      {'NeutralStatement': 'Where is the washroom?'},
      {'NeutralStatement': 'I have no news today.'},
      {'NeutralStatement': 'This is a sentence.'},
      {'NeutralStatement': 'See you later.'}]
    Routine NS
  LoopTerminator NeuSta4
  Routine Rat
  Routine RegRat
  Routine BC
  Routine Cond
  Routine GR
  LoopInitiator Neg5 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Negative5.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StorySentences': 'Integer elementum'},
      {'StorySentences': 'porta! Accusamus'},
      {'StorySentences': 'molestie mattis'},
      {'StorySentences': 'natoque facilisi'},
      {'StorySentences': 'aliquet'},
      {'StorySentences': 'platea'},
      {'StorySentences': 'primis'},
      {'StorySentences': 'amet.'}]
    Routine SS
  LoopTerminator Neg5
  Routine Rat
  LoopInitiator NSB5 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NSB5.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NSBs': 'Lacus donec. Ultricies? Ac nunc. Nonummy consequat aliquam. Imperdiet. Consectetuer fringilla aenean.', 'Cue': 'REACT'},
      {'NSBs': 'In! Ullamcorper aenean dolorem, odio ut curabitur ab tempus orci.', 'Cue': 'REGULATE'},
      {'NSBs': 'Vulputate pharetra. Accusamus nullam facilisis? Diam nullam erat? Porttitor dolor placerat erat fermentum pede dictumst.', 'Cue': 'REACT'},
      {'NSBs': 'Lacus ipsum consequat? Velit vitae rutrum duis aenean! Neque ipsum.', 'Cue': 'REGULATE'},
      {'NSBs': 'Ultricies? Vestibulum luctus, facilisi molestie aliquam, posuere mi dapibus. Faucibus gravida magnis nec.', 'Cue': 'REACT'},
      {'NSBs': 'Dictumst integer. Tempus orci lorem dignissim sem interdum id platea.', 'Cue': 'REGULATE'},
      {'NSBs': 'Fusce ultrices a mattis tellus ligula, egestas justo et! Ab felis eu.', 'Cue': 'REACT'},
      {'NSBs': 'Turpis euismod dignissim? In bibendum odio euismod. Luctus? Potenti temporibus non eros ultrices volutpat. Ab.', 'Cue': 'REGULATE'},
      {'NSBs': 'Porttitor non ligula, convallis ac convallis venenatis vulputate tempus montes curabitur, diam.', 'Cue': 'REACT'},
      {'NSBs': 'Duis? Sem laoreet purus tincidunt! Nullam donec ullamcorper augue vestibulum phasellus nec porttitor mi.', 'Cue': 'REGULATE'}]
    Routine Trial
  LoopTerminator NSB5
  Routine GR
  LoopInitiator Neu5 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Neutral5.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine SS
  LoopTerminator Neu5
  LoopInitiator NeuSta5 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NeutralStatements5.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NeutralStatement': 'Good morning.'},
      {'NeutralStatement': 'It will be sunny.'},
      {'NeutralStatement': 'Where is the washroom?'},
      {'NeutralStatement': 'I have no news today.'},
      {'NeutralStatement': 'This is a sentence.'},
      {'NeutralStatement': 'See you later.'}]
    Routine NS
  LoopTerminator NeuSta5
  Routine Rat
  Routine RegRat
  Routine BC
  Routine Cond
  Routine GR
  LoopInitiator Neg6 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Negative6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StorySentences': 'A eleifend'},
      {'StorySentences': 'sem, quam'},
      {'StorySentences': 'urna, dolorem.'},
      {'StorySentences': 'Porta lorem'},
      {'StorySentences': 'molestie! Phasellus'},
      {'StorySentences': 'sollicitudin tortor'},
      {'StorySentences': 'convallis! Laoreet'},
      {'StorySentences': 'culpa.'}]
    Routine SS
  LoopTerminator Neg6
  Routine Rat
  LoopInitiator NSB6 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NSB6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NSBs': 'Tempor euismod urna scelerisque sagittis? Ab est! Suscipit mi pharetra.', 'Cue': 'REACT'},
      {'NSBs': 'At. Tempus montes. Sapien blandit bibendum! Per. Facilisi ultricies eros.', 'Cue': 'REGULATE'},
      {'NSBs': 'Imperdiet fusce culpa! Nec gravida placerat phasellus integer gravida eros quis, porttitor, ridiculus. Vehicula nibh.', 'Cue': 'REACT'},
      {'NSBs': 'Rutrum sapien cursus! Dolorem pharetra lorem phasellus vitae primis ac dapibus. Eu accumsan ridiculus dignissim.', 'Cue': 'REGULATE'},
      {'NSBs': 'Curabitur! Aenean euismod primis. Pede luctus dapibus ligula sed vestibulum suspendisse vel? Facilisi.', 'Cue': 'REACT'},
      {'NSBs': 'Cursus ante sem eleifend donec. Curabitur interdum ultrices. Suscipit, nonummy a lectus? Lorem laoreet! Primis.', 'Cue': 'REGULATE'},
      {'NSBs': 'Donec phasellus aliquam at auctor odio dignissim commodo ab. Praesent suscipit.', 'Cue': 'REACT'},
      {'NSBs': 'Aliquam. Dui interdum sem posuere, faucibus commodo pellentesque eros natoque aenean, luctus vehicula.', 'Cue': 'REGULATE'},
      {'NSBs': 'Pretium venenatis volutpat quam vulputate consectetuer sit pretium lectus neque sodales accumsan dolorem ac ut.', 'Cue': 'REACT'},
      {'NSBs': 'Dolorem nibh. Tempus natoque, commodo sodales ultricies porta imperdiet posuere.', 'Cue': 'REGULATE'}]
    Routine Trial
  LoopTerminator NSB6
  Routine GR
  LoopInitiator Neu6 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/Neutral6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine SS
  LoopTerminator Neu6
  LoopInitiator NeuSta6 loopType="TrialHandler"
    conditionsFile = PsychopyIntegrationSheets/NeutralStatements6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'NeutralStatement': 'Good morning.'},
      {'NeutralStatement': 'It will be sunny.'},
      {'NeutralStatement': 'Where is the washroom?'},
      {'NeutralStatement': 'I have no news today.'},
      {'NeutralStatement': 'This is a sentence.'},
      {'NeutralStatement': 'See you later.'}]
    Routine NS
  LoopTerminator NeuSta6
  Routine Rat
  Routine RegRat
  Routine End
